PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = image-sentiment-online
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $path
      size = (1, 1)
      startVal [time (s)] = 1.
      stopVal [duration (s)] = 1.0
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    TextComponent textQuestionEmo
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
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      text:
        画像に感じた感情を選んでください。

        1. positive, 2. negative
        4. わからない
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2
      store = all keys
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    TextComponent textGazePoint
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent textQuestionRecog
      letterHeight = 0.05
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $"画像中にあったオブジェクトを選んでください\n\n" + "1. " + objects_choices_0 + "  2. " + objects_choices_1 + "  3. " + objects_choices_2 + "\n\n4. " + objects_choices_3 + "  5. " + objects_choices_4 + "  6. " + objects_choices_5
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    KeyboardComponent keyQuestionRecog
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('orig_path', '/home/takeuchi/data/image_sentiment_data/EmotionROI/train_resize_rename/anger/img_anger_93.jpg'), ('path', 'small_samples/0020.jpg'), ('emotion', 'anger'), ('sentiment', 'N'), ('objects_choices_0', 'Nail'), ('objects_choices_1', 'Eye'), ('objects_choices_2', 'Finger'), ('objects_choices_3', 'Injury'), ('objects_choices_4', 'Texture'), ('objects_choices_5', 'Play'), ('GT_choices_0', True), ('GT_choices_1', False), ('GT_choices_2', True), ('GT_choices_3', True), ('GT_choices_4', False), ('GT_choices_5', False), ('objects_choices_ja_0', '辷ｪ'), ('objects_choices_ja_1',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,
      OrderedDict([('orig_path', '/home/takeuchi/data/image_sentiment_data/EmotionROI/train_resize_rename/anger/img_anger_28.jpg'), ('path', 'small_samples/0100.jpg'), ('emotion', 'anger'), ('sentiment', 'N'), ('objects_choices_0', 'Fire'), ('objects_choices_1', 'Prison'), ('objects_choices_2', 'Flower'), ('objects_choices_3', 'Oilfield'), ('objects_choices_4', 'Sea'), ('objects_choices_5', 'Person'), ('GT_choices_0', True), ('GT_choices_1', False), ('GT_choices_2', False), ('GT_choices_3', False), ('GT_choices_4', False), ('GT_choices_5', False), ('objects_choices_ja_0', '轣ｫ'), ('objects_choices_ja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,
      OrderedDict([('orig_path', '/home/takeuchi/data/image_sentiment_data/EmotionROI/train_resize_rename/anger/img_anger_11.jpg'), ('path', 'small_samples/0290.jpg'), ('emotion', 'anger'), ('sentiment', 'N'), ('objects_choices_0', 'Playground'), ('objects_choices_1', 'Fire'), ('objects_choices_2', 'Hearth'), ('objects_choices_3', 'Outdoor'), ('objects_choices_4', 'Finger'), ('objects_choices_5', 'Puddle'), ('GT_choices_0', False), ('GT_choices_1', True), ('GT_choices_2', True), ('GT_choices_3', False), ('GT_choices_4', False), ('GT_choices_5', False), ('objects_choices_ja_0', '驕翫ｳ蝣ｴ'), ('objects_ch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,
      OrderedDict([('orig_path', '/home/takeuchi/data/image_sentiment_data/EmotionROI/train_resize_rename/anger/img_anger_9.jpg'), ('path', 'small_samples/0330.jpg'), ('emotion', 'anger'), ('sentiment', 'N'), ('objects_choices_0', 'Water'), ('objects_choices_1', 'Cup'), ('objects_choices_2', 'Blade'), ('objects_choices_3', 'Lip'), ('objects_choices_4', 'Finger'), ('objects_choices_5', 'Eye'), ('GT_choices_0', False), ('GT_choices_1', False), ('GT_choices_2', True), ('GT_choices_3', True), ('GT_choices_4', True), ('GT_choices_5', False), ('objects_choices_ja_0', '豌ｴ'), ('objects_choices_ja_1', '繧ｫ繝')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
    Routine trial
  LoopTerminator trials
